PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Use version = 2023.1.3
  Window size (pixels) = [1280, 720]
  expName = DelayDiscounting
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or" + " GBP " + str(future_reward) + " after " + str(delay) + " days" 
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = discounting.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162},
      {'reward_today': 54, 'future_reward': 59, 'delay': 121},
      {'reward_today': 8, 'future_reward': 40, 'delay': 10},
      {'reward_today': 36, 'future_reward': 43, 'delay': 50},
      {'reward_today': 19, 'future_reward': 69, 'delay': 25},
      {'reward_today': 17, 'future_reward': 56, 'delay': 87},
      {'reward_today': 1, 'future_reward': 11, 'delay': 8},
      {'reward_today': 77, 'future_reward': 93, 'delay': 42},
      {'reward_today': 37, 'future_reward': 23, 'delay': 64},
      {'reward_today': 9, 'future_reward': 78, 'delay': 23},
      {'reward_today': 25, 'future_reward': 46, 'delay': 66},
      {'reward_today': 94, 'future_reward': 98, 'delay': 123},
      {'reward_today': 26, 'future_reward': 86, 'delay': 57},
      {'reward_today': 30, 'future_reward': 37, 'delay': 90},
      {'reward_today': 12, 'future_reward': 78, 'delay': 36},
      {'reward_today': 59, 'future_reward': 65, 'delay': 70},
      {'reward_today': 24, 'future_reward': 80, 'delay': 48},
      {'reward_today': 5, 'future_reward': 34, 'delay': 20},
      {'reward_today': 73, 'future_reward': 79, 'delay': 33}]
    Routine trial
  LoopTerminator trials
